PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = sample
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image_stimuli
      color = 1.0000, 1.0000, 1.0000
      image = C:/Users/qasim/Desktop/fixationimage.png
      pos [set every repeat] = stimuli_pos
      saveStartStop = False
      size = (80, 80)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.9
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  Routine smooth_pursuit
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        #image_smooth.pos=[-700,100]

        #generating list of points
        first_line_points=[]
        first_start_pos=-800
        first_end_pos=800

        #for(int i=0; i<9; i+=2)
        for i in range(first_start_pos, first_end_pos, 1):
            pos=(i,100) #initialy it was 400
            first_line_points.append(pos)

        #for i in range(first_start_pos, first_end_pos, 1):
        #    pos=(i,100)
        #    first_line_points.append(pos)

        #for i in range(first_start_pos, first_end_pos, 1):
        #    pos=(i,-400)
        #    first_line_points.append(pos)

        list_length = len(first_line_points)
      Begin Routine:
        #image_smooth.pos=[-700,100]
        list_length = len(first_line_points)
        index=0
        image_smooth.pos=first_line_points[index]
      Each Frame:
        if(index<list_length):
            image_smooth.pos=first_line_points[index]
            index=index+1
    ImageComponent image_smooth
      color = 1.0000, 1.0000, 1.0000
      image = stimuli/cat.png
      saveStartStop = False
      size = (220,150)
      startVal [time (s)] = 0.0
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    KeyboardComponent tr_smooth_key_smooth_resp_
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Saccade_Test
    CodeComponent saccade_code
      Code Type = Py
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      Begin Experiment:
        #image_smooth.pos=[-700,100]
        #my_timer = core.Clock()
        #start_time = my_timer.getTime()
        #print(start_time)
        saccade_time_position=[]
        sc_index=0

        saccades_points=[]
        saccades_points.append((-700,0))
        saccades_points.append((700,0))
        saccades_points.append((-700,0))
        saccades_points.append((700,0))
        saccades_points.append((-700,0))
        saccades_points.append((700,0))
        saccades_points.append((-700,0))
        saccades_points.append((700,0))
        sc_list_length = len(saccades_points)
      Begin Routine:
        '''
        #image_smooth.pos=[-700,100]
        t = my_timer.getTime()
        #saccade_time.append(t)

        sc_list_length = len(saccades_points)
        sc_index=0
        img_circle.pos=saccades_points[sc_index]
        saccade_time_position.append((t,saccades_points[sc_index]))
        '''


        stim_start_time = core.Clock()
        start_time_Sc=stim_start_time.getTime()


        time_data = []
        pos_data = []

         #stim_duration = 0.5 # duration of the stimulus in seconds

        if (sc_index<sc_list_length):
            saccade_image.pos=saccades_points[sc_index]
            sc_index=sc_index+1


        #while timer.getTime()<0:
        #while t < 0.5:
            #current_time = clock.getTime() - start_time
            #current_pos = saccade_image.pos
        #     t = stim_start_time.getTime()
            #time_data.append(current_time)
            #pos_data.append(current_pos)
      Each Frame:
        '''
        t = my_timer.getTime()
        #saccade_time.append(t)
        print(t)
        if (sc_index<sc_list_length):
            saccade_image.pos=saccades_points[sc_index]
            saccade_time_position.append((t,saccades_points[sc_index]))
            sc_index=sc_index+1
            core.wait(0.5) # wait for 2 seconds

        else:
            continueRoutine = False

        '''
      End Experiment:
        expInfo['participant']
        csv_file_name =expInfo['participant']+'_saccade_time.csv'
        csv_file_path = 'saccade_position_time/' + csv_file_name
        with open(csv_file_path, 'w', newline='') as file:
            writer = csv.writer(file)
            writer.writerow(['time', 'img_pos'])
            for tup in saccade_time_position:
                writer.writerow(tup)
      End Routine:
        '''
        expInfo['participant']
        csv_file_name =expInfo['participant']+'_saccade_time.csv'
        csv_file_path = 'saccade_position_time/' + csv_file_name

        #with open('stimuli_positions_data/circle_points.csv', 'w', newline='') as file:
        # Writing the points to a CSV file
        headers = ['time', 'img_position']
        with open(csv_file_path, 'w', newline='') as file:
            writer = csv.writer(file)
            writer.writerow(['time', 'img_pos'])
            for tup in saccade_time_position:
                writer.writerow(tup)
        '''

        print("routine ended")
        elapsed_time = stim_start_time.getTime() - start_time_Sc

        # Print or store the elapsed time
        print("Elapsed time: %.2f seconds" % elapsed_time)
    ImageComponent saccade_image
      color = 1.0000, 1.0000, 1.0000
      image = stimuli/cat.png
      saveStartStop = False
      size = (220,150)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine cross_check
    ImageComponent corss_image
      image = D:/Work/ETH Workshop/workshop_work/eth_ws/stimuli/tcf05.jpeg
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine start_saccade
    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 50.05
      startVal [time (s)] = 0.0
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      text:
        You are going to see a Saccade task.

        :::: Press "Space" key to start ::::
    KeyboardComponent start_scade_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_smooth
    TextComponent txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 50.05
      startVal [time (s)] = 0.0
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      text:
        You are going to see a smooth pursuit task.

        :::: Press "Space" key to start ::::
    KeyboardComponent start_smoth_keybrd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Circular_Movement
    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        import math
        import csv

        def generate_circle_points(radius, interval):
            points = []
            for i in range(0, 360, interval):
                x = radius * math.cos(math.radians(i))
                y = radius * math.sin(math.radians(i))
                points.append((x, y))
            return points

        points = generate_circle_points(radius=350, interval=1)

        #get participant name
        expInfo['participant']
        csv_file_name =expInfo['participant']+'_circle_points.csv'
        csv_file_path = 'circle_position/' + csv_file_name

        #with open('stimuli_positions_data/circle_points.csv', 'w', newline='') as file:
        # Writing the points to a CSV file
        with open(csv_file_path, 'w', newline='') as file:
            writer = csv.writer(file)
            writer.writerow(['x', 'y'])
            writer.writerows(points)
      Begin Routine:
        # how many times do you want this cirlce to be repeated. Counter variable will count number of repitations.
        number_of_repitations = 1
        counter=0

        list_length = len(points)
        index=0
        img_circle.pos=points[index]
      Each Frame:
        if(index<list_length):
            img_circle.pos=points[index]
            index=index+1
        else:
            if(counter!=number_of_repitations):
                index=0
                counter=counter+1
            else:
                continueRoutine = False #ending rountine
    ImageComponent img_circle
      color = 1.0000, 1.0000, 1.0000
      image = stimuli/Pan_Blue_Circle.png
      saveStartStop = False
      size = (60,60)
      startVal [time (s)] = 0.0
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    KeyboardComponent tr_circ_resp_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_circularM
    TextComponent start_circleM
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 50.05
      startVal [time (s)] = 0.0
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      text:
        You are going to see a Circular Movement.

        Keep looking at the moving image.

        :::: Press "Space" key to start ::::
    KeyboardComponent start_circle_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cross_check_circle
    ImageComponent cross_img_circle
      image = D:/Work/ETH Workshop/workshop_work/eth_ws/stimuli/tcf05.jpeg
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine start_saccade
  Routine cross_check
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine Saccade_Test
  LoopTerminator trials
  Routine start_smooth
  Routine cross_check
  Routine smooth_pursuit
  Routine start_circularM
  Routine cross_check_circle
  Routine Circular_Movement
